# Generated by OpenSesame 0.27.1 (Frisky Freud)
# Wed Apr 24 00:44:29 2013 (nt)
# <http://www.cogsci.nl/opensesame>

set foreground "white"
set subject_parity "even"
set _prepare ""
set description "Executes Python code"
set title "New experiment"
set start "experiment"
set font_bold "no"
set coordinates "relative"
set height "768"
set mouse_backend "xpyriment"
set width "1024"
set compensation "0"
set sampler_backend "legacy"
set keyboard_backend "legacy"
set background "black"
set subject_nr "0"
set font_size "32"
set canvas_backend "xpyriment"
set font_family "mono"
set synth_backend "legacy"
set font_italic "no"

define inline_script inline_script
	set _run ""
	___prepare__
	try:
		from ctypes import windll
		global io
		io = windll.dlportio
	except:
		print 'The parallel port could not be opened'
	__end__
	set description "Executes Python code"

define feedback feedback

define inline_script sentence
	___run__
	from openexp.canvas import canvas
	from openexp.keyboard import keyboard
	from openexp.sampler import sampler
	
	
	N = 17 # Nr. of canvases
	SOA = 350 # Just short of 500ms
	correct_sound = sampler(exp, exp.get_file('charvisfiles/cor200.wav'))
	incorrect_sound = sampler(exp, exp.get_file('charvisfiles/in200.wav'))
	
	
	canvas_list = []
	
	my_canvas = canvas(exp)
	my_canvas.text("Zur Kategorie")
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text(self.get('hyperonym'))
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text("gehU+00F6ren")
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text(self.get('art1')+" "+self.get('hyp1')+",")
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text(self.get('art2')+" "+self.get('hyp2'))
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text("und")
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text(self.get('art3')+" "+self.get('hyp3')+".")
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	my_canvas = canvas(exp)
	my_canvas.text('')
	canvas_list.append(my_canvas)
	
	#my_trigger = self.get('trig')
	#trigger_list.append(my_trigger)
	
	for i in canvas_list:
		print i
		
	
	my_keyboard = keyboard(exp, timeout=SOA)
	
	self.set('flag',0)
	for i in range(N):
		t1 = self.time()
		canvas_list[i].show()
		if i == 6:
			global io
			trigger = self.get('trg1')
			port = 0x378
			try:
				io.DlPortWritePortUchar(port, trigger)
			except:
				print 'Failed to send trigger!'
		
			self.sleep(1)
			io.DlPortWritePortUchar(port, 0)
			self.sleep(1)
			#incorrect_sound.play()
			
		elif i == 8:
			global io
			trigger = self.get('trg2')
			port = 0x378
			try:
				io.DlPortWritePortUchar(port, trigger)
			except:
				print 'Failed to send trigger!'
		
			self.sleep(1)
			io.DlPortWritePortUchar(port, 0)
			self.sleep(1)
			#incorrect_sound.play()
			
		elif i == 12:
			global io
			trigger = self.get('trg3')
			port = 0x378
			try:
				io.DlPortWritePortUchar(port, trigger)
			except:
				print 'Failed to send trigger!'
		
			self.sleep(1)
			io.DlPortWritePortUchar(port, 0)
			self.sleep(1)
			#incorrect_sound.play()
	
	
	
		key, t2 = my_keyboard.get_key()
		if key is not None and self.get('flag' ) == 0:
	#	if key is not None and i+3 > self.get('critpos') and self.get('flag' ) == 0:
	
			if key == self.get("correct_response"):
				global io
				trigger = 196
				port = 0x378
				try:
					self.sleep(3)
					io.DlPortWritePortUchar(port, trigger)
					self.sleep(1)		
				except:
					print 'Failed to send trigger!'
		
				self.sleep(1)
				io.DlPortWritePortUchar(port, 0)
				self.sleep(1)
				self.sleep(SOA-(t2-t1))
				self.set('flag',1)
				correct_sound.play()
	
			else:
				global io
				trigger = 197
				port = 0x378
				try:
					self.sleep(3)		
					io.DlPortWritePortUchar(port, trigger)
					self.sleep(1)		
				except:
					print 'Failed to send trigger!'
		
				self.sleep(1)
				io.DlPortWritePortUchar(port, 0)
				self.sleep(1)
			
				self.sleep(SOA-(t2-t1))
				print(SOA-(t2-t1))
				self.set('flag',1)
			
				incorrect_sound.play()
				self.sleep(SOA-(t2-t1))
				self.set('flag',1)
	
	# Set the response variables
	exp.set('response_time', t2-t1)
	exp.set('response', key)
	
	# get t1 from critpos!!!
	__end__
	set _prepare ""
	set description "Executes Python code"

define sketchpad _sketchpad
	set duration "600"
	set description "Displays stimuli"

define sketchpad welcome
	set duration "keypress"
	set start_response_interval "no"
	set description "Displays stimuli"
	draw textline 0 0 "OpenSesame 0.27 'Frisky Freud'" center=1 color=white font_family="serif" font_size=32 font_italic=no font_bold=no show_if="always"

define inline_script _inline_script
	___run__
	global io
	trigger = 255
	port = 0x378
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
	self.sleep(2)
	io.DlPortWritePortUchar(port, 0)
	self.sleep(2)
	__end__
	set _prepare ""
	set description "Executes Python code"

define sketchpad ISI
	set duration "300"
	set description "Displays stimuli"

define sketchpad sketchpad
	set duration "keypress"
	set description "Displays stimuli"
	draw textline 0 0 "Taste DrU+00FCcken" center=1 color=white font_family="mono" font_size=32 font_italic=no font_bold=no show_if="always"

define sequence experiment
	run inline_script "always"
	run welcome "always"
	run loop "always"

define sketchpad fixstar
	set duration "600"
	set description "Displays stimuli"
	draw fixdot 0 0 color=white show_if="always"

define keyboard_response keyboard_response
	set description "Collects keyboard responses"
	set timeout "infinite"
	set flush "yes"

define sequence sentq
	run _inline_script "always"
	run fixstar "always"
	run ISI "always"
	run sentence "always"
	run sketchpad "always"
	run _sketchpad "always"

define notepad getting_started
	__note__
	Hi,
	
	Welcome to OpenSesame 0.27 "Frisky Freud"!
	
	If you are new to OpenSesame, you may wish to follow the tutorial,
	which can be found online.
	
	There are also many example experiments, which may help you to get
	started with creating your own. These can be found in the "examples"
	folder provided with OpenSesame or, again, online,
	
	For more information, please refer to OpenSesame documentation area:
	<http://osdoc.cogsci.nl/>
	
	And feel free to ask for help on the forum:
	<http://forum.cogsci.nl/>
	
	Have fun with OpenSesame!
	
	--
	
	Sebastiaan
	__end__
	set description "Some pointers to help you get started!"

define loop loop
	set repeat "1"
	set description "Repeatedly runs another item"
	set skip "0"
	set offset "no"
	set item "sentq"
	set column_order "itemnr;Zur;Kategorie;hyperonym;geh;art1;hyp1;art2;hyp2;und;art3;hyp3;itemnr2;trg1;trg2;trg3;correct_response;critpos"
	set cycles "480"
	set order "random"
	setcycle 0 Zur "Zur"
	setcycle 0 art1 "die"
	setcycle 0 art3 "das"
	setcycle 0 art2 "das"
	setcycle 0 itemnr "1"
	setcycle 0 hyp1 "Qualle"
	setcycle 0 trg1 "210"
	setcycle 0 hyp3 "Wildschwein"
	setcycle 0 hyp2 "Flusspferd"
	setcycle 0 correct_response "y"
	setcycle 0 trg2 "220"
	setcycle 0 hyperonym "Tiere"
	setcycle 0 und "und"
	setcycle 0 itemnr2 "1"
	setcycle 0 critpos "13"
	setcycle 0 geh "gehU+00F6ren"
	setcycle 0 Kategorie "Kategorie"
	setcycle 0 trg3 "230"
	setcycle 1 Zur "Zur"
	setcycle 1 art1 "die"
	setcycle 1 art3 "die"
	setcycle 1 art2 "der"
	setcycle 1 itemnr "2"
	setcycle 1 hyp1 "Birne"
	setcycle 1 trg1 "210"
	setcycle 1 hyp3 "Mango"
	setcycle 1 hyp2 "Apfel"
	setcycle 1 correct_response "y"
	setcycle 1 trg2 "220"
	setcycle 1 hyperonym "Obst"
	setcycle 1 und "und"
	setcycle 1 itemnr2 "2"
	setcycle 1 critpos "13"
	setcycle 1 geh "gehU+00F6ren"
	setcycle 1 Kategorie "Kategorie"
	setcycle 1 trg3 "230"
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	setcycle 3 Zur "Zur"
	setcycle 3 art1 "die"
	setcycle 3 art3 "der"
	setcycle 3 art2 "die"
	setcycle 3 itemnr "4"
	setcycle 3 hyp1 "RU+00FCbe"
	setcycle 3 trg1 "210"
	setcycle 3 hyp3 "Porree"
	setcycle 3 hyp2 "Gurke"
	setcycle 3 correct_response "y"
	setcycle 3 trg2 "220"
	setcycle 3 hyperonym "GemU+00FCse"
	setcycle 3 und "und"
	setcycle 3 itemnr2 "4"
	setcycle 3 critpos "13"
	setcycle 3 geh "gehU+00F6ren"
	setcycle 3 Kategorie "Kategorie"
	setcycle 3 trg3 "230"
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	setcycle 9 Zur "Zur"
	setcycle 9 art1 "das"
	setcycle 9 art3 "das"
	setcycle 9 art2 "das"
	setcycle 9 itemnr "10"
	setcycle 9 hyp1 "Haschisch"
	setcycle 9 trg1 "210"
	setcycle 9 hyp3 "Lachgas"
	setcycle 9 hyp2 "Acid"
	setcycle 9 correct_response "y"
	setcycle 9 trg2 "220"
	setcycle 9 hyperonym "Drogen"
	setcycle 9 und "und"
	setcycle 9 itemnr2 "10"
	setcycle 9 critpos "13"
	setcycle 9 geh "gehU+00F6ren"
	setcycle 9 Kategorie "Kategorie"
	setcycle 9 trg3 "230"
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	setcycle 240 Zur "Zur"
	setcycle 240 art1 "der"
	setcycle 240 art3 "das"
	setcycle 240 art2 "das"
	setcycle 240 itemnr "1"
	setcycle 240 hyp1 "Qualle"
	setcycle 240 trg1 "211"
	setcycle 240 hyp3 "Wildschwein"
	setcycle 240 hyp2 "Flusspferd"
	setcycle 240 correct_response "x"
	setcycle 240 trg2 "220"
	setcycle 240 hyperonym "Tiere"
	setcycle 240 und "und"
	setcycle 240 itemnr2 "1"
	setcycle 240 critpos "7"
	setcycle 240 geh "gehU+00F6ren"
	setcycle 240 Kategorie "Kategorie"
	setcycle 240 trg3 "230"
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	setcycle 260 Zur "Zur"
	setcycle 260 art1 "die"
	setcycle 260 art3 "der"
	setcycle 260 art2 "der"
	setcycle 260 itemnr "71"
	setcycle 260 hyp1 "Erde"
	setcycle 260 trg1 "210"
	setcycle 260 hyp3 "Merkur"
	setcycle 260 hyp2 "Venus"
	setcycle 260 correct_response "x"
	setcycle 260 trg2 "221"
	setcycle 260 hyperonym "Planeten"
	setcycle 260 und "und"
	setcycle 260 itemnr2 "71"
	setcycle 260 critpos "9"
	setcycle 260 geh "gehU+00F6ren"
	setcycle 260 Kategorie "Kategorie"
	setcycle 260 trg3 "230"
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	setcycle 330 Zur "Zur"
	setcycle 330 art1 "die"
	setcycle 330 art3 "der"
	setcycle 330 art2 "der"
	setcycle 330 itemnr "51"
	setcycle 330 hyp1 "Amsel"
	setcycle 330 trg1 "212"
	setcycle 330 hyp3 "Clownfisch"
	setcycle 330 hyp2 "Delphin"
	setcycle 330 correct_response "x"
	setcycle 330 trg2 "220"
	setcycle 330 hyperonym "Meerestiere"
	setcycle 330 und "und"
	setcycle 330 itemnr2 "51"
	setcycle 330 critpos "7"
	setcycle 330 geh "gehU+00F6ren"
	setcycle 330 Kategorie "Kategorie"
	setcycle 330 trg3 "230"
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	setcycle 350 Zur "Zur"
	setcycle 350 art1 "der"
	setcycle 350 art3 "der"
	setcycle 350 art2 "der"
	setcycle 350 itemnr "111"
	setcycle 350 hyp1 "Sessel"
	setcycle 350 trg1 "210"
	setcycle 350 hyp3 "Esstisch"
	setcycle 350 hyp2 "Branntwein"
	setcycle 350 correct_response "x"
	setcycle 350 trg2 "222"
	setcycle 350 hyperonym "MU+00F6bel"
	setcycle 350 und "und"
	setcycle 350 itemnr2 "111"
	setcycle 350 critpos "9"
	setcycle 350 geh "gehU+00F6ren"
	setcycle 350 Kategorie "Kategorie"
	setcycle 350 trg3 "230"
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	run sentq

